#The number of channels we want to process
nchannels_in = 2
#Number of frames to be processed in each block.
fragsize = 128
#Sampling rate. Has to be the same as the input signal of JACK
srate = 48000

mhalib = transducers
# Die Equalisierung bewirkt eine Verringerung der Lautstaerke im linken Kanal (da nur einseitig), daher etwas mehr
# Verstaerken. Die Verringerung der Lautstaerke ist relativ stark.
mha.calib_in.peaklevel = [136 136]
mha.calib_out.peaklevel = [115 115]

mha.calib_out.softclip.tau_attack = 0.002
mha.calib_out.softclip.tau_decay = 0.005
mha.calib_out.softclip.threshold = 0.03
mha.calib_out.softclip.slope = 0.5
mha.calib_out.softclip.tau_clip = 1
mha.calib_out.softclip.max_clipped = 1
mha.calib_out.do_clipping = yes

mha.plugin_name = fftfilter
mha.fftfilter.irs=[[0.006182012 -0.045876348 0.073000367 0.017272831 0.017735842 0.055839903 0.028133792 0.100929956 -0.032500494 0.034016117 0.042202503 -0.024528938 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0.0];[0.028970536 -0.095301237 0.125273968 0.061514857 -0.045825711 0.108972029 0.042716631 0.072488255 -0.000261923 -0.010292154 0.080530607 0.014616581 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0.0]]
mha.fftfilter.fftlen=1024
#In this example, we load the IO library that connects
#the MHA to the Jack audio server.
iolib = MHAIOJack
# The following variable is used to select the input sound
# channel(s), following the usual Jack nomenclature
io.con_in = [system:capture_4 system:capture_7]
# con_out sets the output channels
io.con_out = [system:playback_4 system:playback_7]